CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw_colour
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw_colour
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:OrigBlue
    Channel number:2
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    Image name:OrigGreen
    Channel number:3
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    Image name:OrigRed
    Channel number:4
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    Image name:origpur

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:OrigGreen
    Name the output image:Illumgreen
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigRed
    Name the output image:illumRed
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:origpur
    Name the output image:IllumPur
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:OrigGreen
    Name the output image:correctedgreen
    Select the illumination function:Illumgreen
    Select how the illumination function is applied:Divide
    Select the input image:OrigRed
    Name the output image:Correctedred
    Select the illumination function:illumRed
    Select how the illumination function is applied:Divide
    Select the input image:origpur
    Name the output image:CorrectedPur
    Select the illumination function:IllumPur
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

Align:[module_num:10|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
    Select the alignment method:Mutual Information
    Crop mode:Crop to aligned region
    Select the first input image:Correctedred
    Name the first output image:AlignedRed
    Select the second input image:correctedgreen
    Name the second output image:AlignedGreen
    Select the additional image:CorrectedPur
    Name the output image:AlignedPur
    Select how the alignment is to be applied:Similarly

IdentifyPrimaryObjects:[module_num:11|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.5
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Distance - N
    Select the input image:OrigBlue
    Number of pixels by which to expand the primary objects:10
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyPrimaryObjects:[module_num:13|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notes:['']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
    Select the input image:AlignedGreen
    Name the primary objects to be identified:LRP8
    Typical diameter of objects, in pixel units (Min,Max):3,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.8
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:AlignedRed
    Name the primary objects to be identified:TUBB3
    Typical diameter of objects, in pixel units (Min,Max):1,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.5
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RelateObjects:[module_num:15|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
    Parent objects:Cell
    Child objects:TUBB3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:16|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
    Select the objects to filter:Cell
    Name the output objects:tubb3poscells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_TUBB3_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:17|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
    Parent objects:tubb3poscells
    Child objects:LRP8
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:18|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
    Select the objects to filter:tubb3poscells
    Name the output objects:tubb3lrp8poscells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_LRP8_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|OneDrive - Karolinska Institutet\\Documents
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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