CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw_colour
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:raw_colour
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigBlue
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigRed
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
IdentifyPrimaryObjects:[module_num:6|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):23,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.75
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.75
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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notes:['']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
    Select the input image:OrigRed
    Name the primary objects to be identified:nestin
    Typical diameter of objects, in pixel units (Min,Max):30,500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.75
    Threshold correction factor:0.75
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

RelateObjects:[module_num:9|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notes:['']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
    Parent objects:Cells
    Child objects:nestin
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:10|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notes:['After the relationship between objects has been ennumerated, the FilterObjects module can transform this relationship into a binary relationship, i.e. 0 if there is no PH3 and 1 if there is PH3.']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
    Select the objects to filter:Cells
    Name the output objects:nestinposcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_nestin_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CalculateMath:[module_num:11|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notes:['']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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_nestinposcells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Cells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - Karolinska Institutet\\Documents
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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