CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw_colour
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    Set intensity range from:Image metadata
    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:[' Color To Gray module after Load Images to separate the incoming image into its component channels', 'Here, DAPI, wheat germ agglutinin (WGA) staining, and virus E proteins were imaged at blue, green, red channels, respectively. ']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
    Select the input image:raw_colour
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigBlue
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigRed
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
IdentifyPrimaryObjects:[module_num:6|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notes:[' DAPI (blue) is perfect for segmenting individual nucleus. ']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.34
    Threshold correction factor:1.34
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:7|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notes:[' WGA (green) is perfect for segmenting for cytoplasm or cells. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:OrigGreen
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
CorrectIlluminationCalculate:[module_num:8|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notes:['The Correct Illumination ‐ Calculate and Correct Illumination ‐ Apply modules are intended to compensate for the non‐uniformities in illumination often present in microscopy images. It is not uncommon for the intensity within a fluorescence image to vary by more than two‐fold across the field of view due to the optics of the microscope, imperfection in the slide or sensor bias. Correcting the illumination variation can be important both for accurate segmentation.', '', 'The input image is named OrigRed; the output illumination correction function (ICF) is named Illumred. The ICF is calculated using the Regular method which uses the foreground pixels to estimate the ICF. Since the ICF made using the Regular method is applied by division (see next module), it needs to have a minimum value of 1 to maintain the range of the correction and avoid division by zero, so we enable rescaling. Choose Each to calculate the ICF to correct each image individually; if the input images are acquired as a large collection of images during the same acquisition run with identical acquisition settings, chose All. Since the foreground and background intensities appear to be fairly smooth, with no obvious large‐scale heterogeneities, the smoothing method chosen is Fit Polynomial. (Ref: Cell profiler tutorior) ']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
    Select the input image:OrigRed
    Name the output image:Illumred
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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notes:['The input image is selected as OriRed, the output image is named CorrRed and the illumination function is selected as Illumred. As mentioned above, if Regular is chosen as the ICF creation method, the ICF should be applied by division. (Ref: Cell profiler tutorior) ']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
    Select the input image:OrigRed
    Name the output image:CorrRed
    Select the illumination function:Illumred
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:10|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notes:['The virus E was segdimented from the CorrRed images']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
    Select the input image:CorrRed
    Name the primary objects to be identified:E
    Typical diameter of objects, in pixel units (Min,Max):1,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

RelateObjects:[module_num:11|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notes:['The E and WGA stains overlap with each other, so this co-localization can be used to classify cells. This is relatioship is ennumerated by the RelateObjects module and the labels from one set of objects is mapped into another set of objects. Here, we can lable E from each single cell. ']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
    Parent objects:Cells
    Child objects:E
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:12|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notes:['Choose the folder to export measuring data. The data sheet summarizing information of the object "Cells" will give information of number of E counted per the object- "cells" in a specific image. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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